CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ManipNb>.*)-(?P<Condition1>.*)_(?P<Condition2>.*)-(?P<Condition3>.*)-(?P<Condition4>.*)_(?P<ImageNumber>.*)-ApoTome RAW Convert-(?P<ImageNb>.*).czi
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:6|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enabled:False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
    Select the input image:Red
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:7|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enabled:False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
    Select the input image:EnhancedRed
    Name the primary objects to be identified:Spot
    Typical diameter of objects, in pixel units (Min,Max):1,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Red
    Name the primary objects to be identified:Spot
    Typical diameter of objects, in pixel units (Min,Max):1,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:9|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
    Parent objects:Nuclei
    Child objects:Spot
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SpotInNuclei
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
MaskObjects:[module_num:10|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
    Select objects to be masked:SpotInNuclei
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Red
    Select objects to measure:MaskedNuclei, SpotInNuclei

GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Red
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    Select the image to be colored blue:Blue
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#80FFFF
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:SpotInNuclei

DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):24
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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