CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:ch0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:ch0
    Name the output image:dapi_bg
    Select how the illumination function is calculated:Background
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    Block size:500
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:ch1
    Name the output image:protA_bg
    Select how the illumination function is calculated:Background
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    Block size:500
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:ch0
    Name the output image:corr_dapi
    Select the illumination function:dapi_bg
    Select how the illumination function is applied:Subtract
    Select the input image:ch1
    Name the output image:corr_protA
    Select the illumination function:protA_bg
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:corr_dapi
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:corr_protA
    Name the primary objects to be identified:spots_unmasked
    Typical diameter of objects, in pixel units (Min,Max):1,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:10|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
    Parent objects:nuclei
    Child objects:spots_unmasked
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:spots
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:corr_protA
    Select objects to measure:spots

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:nuclei
    Name the output image:nuclei_labels
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:spots
    Name the output image:spots_labels
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:nuclei_labels
    Select method for constructing file names:Single name
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    Enter single file name:nuclei
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:spots_labels
    Select method for constructing file names:Single name
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    Enter single file name:spots
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
